PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'logs/%s_%s' % (expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1200]
  color = -1.0000, -1.0000, -1.0000
  expName = Picture_Naming
  keyboardBackend = ioHub
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Routines
  Routine Waiting_for_Scanner
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    ImageComponent Instructions
      image = resources/instructions.png
      saveStartStop = False
      size = (1.2, None)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent fORP_Trigger
      allowedKeys = "5"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Rest_Block
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    TextComponent Rest_Crosshair
      color = 1.0000, 1.0000, -1.0000
      letterHeight = 200
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
      units = pix
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    TextComponent Rest_Symbols
      color = '#00ffff'
      letterHeight = 200
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $symbols[symbols_counter]
      units = pix
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    CodeComponent Symbols_Counter_Code
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        # Create list of symbols
        symbols = ["*/+^;@",
        "|\£?:#",
        "%=+|£",
        "$%^£&*",
        "*$&^%\"",
        "@?£<*)",
        "+_>~#\"",
        "!*^£:<",
        "#';/?&^",
        "@-@:{)*",
        "&\"+`¬?.>"]

        # Load list of objects
        fn = 'resources/objects.txt'
        with open(fn, encoding="utf-8") as f:
            objects = f.read().split("\n")
            objects = [e.rstrip("\r\n") for e in objects]
            if objects[-1] == "":
                objects = objects[0:-1]

        #Shuffle objects and symbols lists
        random.shuffle(symbols)
        random.shuffle(objects)

        #Initialise counters to loop through object and symbols lists
        symbols_counter = 0
        object_counter = 0
      End Routine:
        symbols_counter += 1
        if symbols_counter == len(symbols):
            random.shuffle(symbols)
            symbols_counter = 0
  Routine Rest_Block_Pad
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    TextComponent Rest_Crosshair_Pad
      color = 1.0000, 1.0000, -1.0000
      letterHeight = 200
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
      units = pix
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    TextComponent Rest_Symbols_Pad
      color = '#00ffff'
      letterHeight = 200
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $symbols[symbols_counter]
      units = pix
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    CodeComponent Symbols_Counter_Code_Pad
      Code Type = Auto->JS
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      End Routine:
        symbols_counter += 1
        if symbols_counter == len(symbols):
            random.shuffle(symbols)
            symbols_counter = 0
  Routine Task_Block
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    TextComponent Task_Crosshair
      color = 1.0000, 1.0000, -1.0000
      letterHeight = 200
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
      units = pix
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    ImageComponent Object
      image [set every repeat] = $objects[object_counter]
      size = (1.2, None)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      units = height
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    CodeComponent Object_Counter_Code
      Code Type = Auto->JS
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      End Routine:
        object_counter += 1
        if object_counter == len(objects):
            random.shuffle(objects)
            object_counter = 0
  Routine Task_Block_Pad
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    TextComponent Task_Crosshair_Pad
      color = 1.0000, 1.0000, -1.0000
      letterHeight = 200
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
      units = pix
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    ImageComponent Image_Pad
      image [set every repeat] = $objects[object_counter]
      size = (1.2, None)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.2
      units = height
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    CodeComponent Object_Counter_Code_Pad
      Code Type = Auto->JS
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      End Routine:
        object_counter += 1
        if object_counter == len(objects):
            random.shuffle(objects)
            object_counter = 0
Flow
  Routine Waiting_for_Scanner
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 8
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    LoopInitiator repeats_rest loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 7
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      conditions:
        [{'rest_symbols': 10},
        {'rest_symbols': 9},
        {'rest_symbols': 8},
        {'rest_symbols': 7},
        {'rest_symbols': 6},
        {'rest_symbols': 5},
        {'rest_symbols': 4},
        {'rest_symbols': 3},
        {'rest_symbols': 2},
        {'rest_symbols': 1}]
      Routine Rest_Block
    LoopTerminator repeats_rest
    Routine Rest_Block_Pad
    LoopInitiator repeats_task loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 7
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      Routine Task_Block
    LoopTerminator repeats_task
    Routine Task_Block_Pad
  LoopTerminator blocks
