PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'logs/%s_%s' % (expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1200]
  color = -1.0000, -1.0000, -1.0000
  expName = Verbal_Fluency
  keyboardBackend = ioHub
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Routines
  Routine Waiting_for_Scanner
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    ImageComponent Instructions
      image = resources/instructions.png
      size = (1.2, None)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent fORP_Trigger
      allowedKeys = "5"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Rest_Task_Block
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    CodeComponent Code
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        letters = list("ABCDEFGLMNOPRSTUVZ")
        random.shuffle(letters)
    TextComponent Rest
      color = 1.0000, 1.0000, -1.0000
      letterHeight = 200
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18.2
      text = +
      units = pix
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    TextComponent Task
      color = '#00ffff'
      letterHeight = 400
      startVal [time (s)] = 18.2
      stopVal [duration (s)] = 18.2
      text [set every repeat] = $letters[blocks.thisN]
      units = pix
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Flow
  Routine Waiting_for_Scanner
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 8
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    conditions:
      [{'stim': 'stims/rest_hands.png'},
      {'stim': 'stims/task_hands_right.png'}]
    Routine Rest_Task_Block
  LoopTerminator blocks
