PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'logs/%s_%s' % (expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1200]
  color = -1.0000, -1.0000, -1.0000
  expName = Visual
  keyboardBackend = ioHub
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Routines
  Routine Waiting_for_Scanner
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    ImageComponent Instructions
      image = resources/instructions.png
      size = (1.2, None)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent fORP_Trigger
      allowedKeys = "5"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Rest_Block
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    ImageComponent Rest
      image = resources/rest.png
      size = (1.2, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.6
      units = height
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  Routine Task_Block
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    CodeComponent Code
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        # generate a list of periods to display each chequerboard image

        frame = 0
        # planned length of block
        block_duration_ms = 15600

        # number of frames to make this block length
        max_frames = int(block_duration_ms * expInfo['frameRate'] / 1000)

        # calculate difference between desired length of block and actual
        actual_block_duration_ms = 1000 * max_frames / expInfo['frameRate']
        pad_duration = (block_duration_ms - actual_block_duration_ms) / 1000

        # min time to display an image
        min_flick_duration = 0.05

        # max time to display and image
        max_flick_duration = 0.25

        min_flick_frames = int(min_flick_duration * expInfo['frameRate'])
        max_flick_frames = int(max_flick_duration * expInfo['frameRate'])

        frame = 0
        frame_list_a = []
        while True:
            frame1 = random.randint(min_flick_frames,max_flick_frames)
            frame += frame1
            frame_list_a.append(frame1)
            if frame >= (max_frames - max_flick_frames):
                break

        # show one more image to stop at max_frames exactly
        frames_remaining = max_frames - frame
        frame_list_a.append(frames_remaining)
        num_frames = len(frame_list_a)

        # create a second shuffled list for the other image
        frame_list_b = frame_list_a.copy()
        random.shuffle(frame_list_b)

        counter = 0
      End Routine:
        counter += 1
        if counter == num_frames:
            random.shuffle(frame_list_a)
            random.shuffle(frame_list_b)
            counter = 0
    ImageComponent A
      image = resources/task_a.png
      size = (1.2, None)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = $frame_list_a[counter]
      units = height
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    ImageComponent B
      image = resources/task_b.png
      size = (1.2, None)
      startVal [frame N] = $frame_list_a[counter]
      stopVal [duration (frames)] = $frame_list_b[counter]
      units = height
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  Routine Task_Block_Pad
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    CodeComponent Pad_Code
      Code Type = Auto->JS
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      Begin Routine:
        core.wait(pad_duration)
Flow
  Routine Waiting_for_Scanner
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 9
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    Routine Rest_Block
    LoopInitiator repeats_task loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = num_frames
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      Routine Task_Block
    LoopTerminator repeats_task
    Routine Task_Block_Pad
  LoopTerminator blocks
