PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'logs/%s_%s' % (expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1200]
  color = -1.0000, -1.0000, -1.0000
  expName = verb_generation
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine operator_input
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    CodeComponent operator_input_code
      Code Type = Auto->JS
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      Before Experiment:
        # Create list of languages for drop-down menu
        from pathlib import Path
        resources_dp = Path('resources')
        nouns_dp = resources_dp / 'nouns'
        language_list = []
        for noun_fn in nouns_dp.iterdir():
            language_list.append(Path(noun_fn).stem.capitalize())

        # Create a dialogue box so that the operator can set options for the paradigm
        operator_dialog_a = gui.Dlg(title='Paradigm Options')
        operator_dialog_a.addField('Scanner:', choices=['Siemens','GE'], tip='Select the MRI scanner manufacturer. On a Siemens PrismaFit MRI system the Sequence Trigger Out is the optical connector labelled U2 on D90 on Board D67 in the Small Signal Unit. A trigger pulse is sent at the start of each EPI volume i.e. at the start of each TR. On a GE Premier MRI system the RF Unblanking trigger, labelled socket J10, on the Exciter Module in the PEN Cabinet can be used as the trigger. The trigger occurs everytime an RF pulse is played out. The delay required to ensure the paradigm does not start during the dummy scans is built into the experiments. This delay is set in the wait_for_dummy_scans sequence. The operator will be prompted to enter the repetition time (TR) of the fMRI acquisition and the number of dummy scans (UserCV numdda) the delay is then calculated using delay = numdda x TR.')
        operator_dialog_a.addField('Trigger:', choices=['5', '6', 't', 'o'], tip="Select the trigger produced by the fORP Interface (905 or 932). See fORP manual for an explanation of how to set the trigger type.")
        operator_dialog_a.addField('Language:', initial='English',choices=language_list, tip="Select the language.")
        operator_dialog_a.validate()
        operator_dialog_a_data = operator_dialog_a.show()

        if not operator_dialog_a.OK:
            print('* Operator clicked Cancel, exiting paradigm')
            core.quit()

        scanner = operator_dialog_a_data[0].lower()

        def set_dummy_delay(scanner_manufacturer):
            """
            Calculate the time delay in seconds needed to wait between receiving a
            trigger from the fORP and starting the paradigm.

            :param scanner_manufacturer: the scanner manufacturer (siemens or ge)
            :type scanner_manufacturer:str
            :return: Time delay in seconds
            :rtype: float
            """

            if scanner_manufacturer == 'siemens':
                # For Siemens MRI systems the tigger is recieved at the start of the first
                # 'real' fMRI volume i.e. no triggers are sent during dummy scans so no
                # delay is needed
                 delay = 0
            elif scanner_manufacturer == 'ge':
                # Create a dialogue box so that the operator can enter the number of
                # dummy scans and the repetition time
                operator_dialog = gui.Dlg(title='Dummy Scan Options')
                operator_dialog.addField('Number of dummy scans (DDAs):', initial=5, choices=['0','1','2', '3', '4', '5', '6', '7', '8'], tip="Select the number of dummy scans (see userCV numdda)")
                operator_dialog.addField('Repetition time (TR) in ms:', initial=3330, tip="Enter the repetition time in ms")
                operator_dialog.validate()
                operator_dialog_data = operator_dialog.show()

                if operator_dialog.OK:
                    numdda = int(operator_dialog_data[0])
                    try:
                        TR = int(operator_dialog_data[1])
                    except ValueError:
                        print('* WARNING: TR must be an integer number of ms')
                        # Re-prompt the user to enter the TR if they failed to enter an int
                        delay = set_dummy_delay()
                else:
                    print('* Operator clicked Cancel, exiting paradigm')
                    core.quit()

                delay = float(numdda * TR / 1000)

            return delay

        dummy_delay_s = set_dummy_delay(scanner)
      Begin Experiment:
        # These variables need to be available with "run" function to must be placed here rather than in "Before Experiment"
        trigger_type = operator_dialog_a_data[1]
        language = operator_dialog_a_data[2].lower()

        if language in ['arabic', 'pashto']:
            text_style = 'Arabic'
        elif language == 'hebrew':
            text_style = 'RTL'
        else:
            text_style = 'LTR'
  Routine wait_for_manual_trigger
    RoutineSettingsComponent wait_for_manual_trigger
      skipIf = scanner == "siemens"
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    CodeComponent manual_trigger_code
      Code Type = Auto->JS
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      Begin Routine:
        # Note: the wait_for_manual_trigger routine is skipped if scanner == siemens (see Flow tab of Routine settings)
        if scanner == 'ge':
            print('* Press "m" after the Prep Scan has finished')
    ImageComponent instructions_wait_for_manual_trigger
      image = resources/verb_generation_instructions.png
      size = (1.2, None)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent manual_trigger
      allowedKeys = "m"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine wait_for_scanner_trigger
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    CodeComponent scanner_trigger_code
      Code Type = Auto->JS
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      Begin Routine:
        print('* Waiting for scanner trigger "%s" to start the paradigm' % trigger_type)
      End Routine:
        # trigger_type is transformed from str to tuple in the routine, so just need to extract first element
        print('* Trigger "%s" received. Waiting %g s for dummy scans to finish before starting paradigm' % (trigger_type[0], dummy_delay_s))
    ImageComponent instructions_wait_for_scanner_trigger
      image = resources/verb_generation_instructions.png
      size = (1.2, None)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent scanner_trigger
      allowedKeys [set every repeat] = trigger_type
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine wait_for_dummy_scans
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    ImageComponent instructions_wait_for_dummy_scans
      image = resources/verb_generation_instructions.png
      size = (1.2, None)
      startVal [time (s)] = 0
      stopVal [duration (s)] = dummy_delay_s
      units = height
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  Routine rest_block
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    CodeComponent rest_code
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        # Create a list of symbols
        symbols = ["*/+^;@", "|\£?:#", "%=+|£", "$%^£&*", "*$&^%\"", "@?£<*)", "+_>~#\"", "!*^£:<", "#';/?&^", "@-@:{)*", "&\"+`¬?.>"]

        # Shuffle list of symbols
        random.shuffle(symbols)

        # Initialise counter to loop through list of symbols
        symbols_counter = 0
        rest_rep_counter = 0
      Begin Routine:
        # Set the duration, in seconds, that the symbols appear on screen
        if rest_rep_counter < 8:
            symbols_duration = 1
        else:
            symbols_duration = 1.2
      End Routine:
        # Increment symbols_counter and rest_rep_counter
        symbols_counter += 1
        if rest_rep_counter < 8:
            rest_rep_counter += 1
        else:
            rest_rep_counter = 0

        # Re-shuffle list of symbols if necessary
        if symbols_counter == len(symbols):
            random.shuffle(symbols)
            symbols_counter = 0
    TextComponent rest_crosshair
      color = 1.0000, 1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
      units = height
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    TextComponent rest_symbols
      color = '#00ffff'
      letterHeight = 0.25
      startVal [time (s)] = 1
      stopVal [duration (s)] = $symbols_duration
      text [set every repeat] = $symbols[symbols_counter]
      units = height
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  Routine task_block
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    CodeComponent task_code
      Code Type = Auto->JS
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      Before Experiment:
        # Import the package needed to render Arabic words
        try:
            from arabic_reshaper import ArabicReshaper
            haveArabic = True
        except ImportError:
            haveArabic = False

        # Set the configuration for Arabic
        arabic_config = {'delete_harakat': False,  # if present, retain any diacritics
                         'shift_harakat_position': True}  # shift by 1 to be compatible with the bidi algorithm
      Begin Experiment:
        # Open the text file containing the list of nouns
        fp = nouns_dp / ('%s.txt' % language )
        fh = open(fp, encoding="utf-8")

        # Create a list of nouns without newlines and carriage returns
        nouns = [line.rstrip() for line in fh]

        # Close the text file containing the list of nouns
        fh.close()

        # Shuffle the list of nouns
        random.shuffle(nouns)

        # Initialise counters to loop through list of nouns
        noun_counter = 0
        task_rep_counter = 0
      Begin Routine:
        # Set the duration, in seconds, that the noun appears on screen
        if task_rep_counter < 8:
            noun_duration = 1
        else:
            noun_duration = 1.2

        # Manually overide attributes of task_noun (which is TextStim class)
        setattr(task_noun, 'languageStyle', text_style)
        setattr(task_noun, 'arabic_reshaper', ArabicReshaper(configuration = arabic_config))
      End Routine:
        # Increment noun_counter and task_rep_counter
        noun_counter += 1
        if task_rep_counter < 8:
            task_rep_counter += 1
        else:
            task_rep_counter = 0

        # Re-shuffle list of nouns if necessary
        if noun_counter == len(nouns):
            random.shuffle(nouns)
            noun_counter = 0
    TextComponent task_crosshair
      color = 1.0000, 1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
      units = height
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    TextComponent task_noun
      color = '#00ffff'
      letterHeight = 0.25
      startVal [time (s)] = 1
      stopVal [duration (s)] = $noun_duration
      text [set every repeat] = $nouns[noun_counter]
      units = height
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  Routine rest_pad
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    TextComponent rest_2
      color = 1.0000, 1.0000, -1.0000
      letterHeight = 0.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5.2
      text = +
      units = height
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Flow
  Routine operator_input
  Routine wait_for_manual_trigger
  Routine wait_for_scanner_trigger
  Routine wait_for_dummy_scans
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 8
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    LoopInitiator repeats_rest loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 9
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      Routine rest_block
    LoopTerminator repeats_rest
    LoopInitiator repeats_task loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 9
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      Routine task_block
    LoopTerminator repeats_task
  LoopTerminator blocks
  Routine rest_pad
