PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'logs/%s_%s' % (expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1200]
  color = -1.0000, -1.0000, -1.0000
  expName = visual
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine operator_input
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    CodeComponent operator_input_code
      Code Type = Auto->JS
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      Before Experiment:
        # Create a dialogue box so that the operator can set options for the paradigm
        operator_dialog_a = gui.Dlg(title='Paradigm Options')
        operator_dialog_a.addField('Scanner:', choices=['Siemens','GE'], tip='Select the MRI scanner manufacturer. On a Siemens PrismaFit MRI system the Sequence Trigger Out is the optical connector labelled U2 on D90 on Board D67 in the Small Signal Unit. A trigger pulse is sent at the start of each EPI volume i.e. at the start of each TR. On a GE Premier MRI system the RF Unblanking trigger, labelled socket J10, on the Exciter Module in the PEN Cabinet can be used as the trigger. The trigger occurs everytime an RF pulse is played out. The delay required to ensure the paradigm does not start during the dummy scans is built into the experiments. This delay is set in the wait_for_dummy_scans sequence. The operator will be prompted to enter the repetition time (TR) of the fMRI acquisition and the number of dummy scans (UserCV numdda) the delay is then calculated using delay = numdda x TR.')
        operator_dialog_a.addField('Trigger:', choices=['5', '6', 't', 'o'], tip="Select the trigger produced by the fORP Interface (905 or 932). See fORP manual for an explanation of how to set the trigger type.")
        operator_dialog_a.validate()
        operator_dialog_a_data = operator_dialog_a.show()

        if not operator_dialog_a.OK:
            print('* Operator clicked Cancel, exiting paradigm')
            core.quit()

        scanner = operator_dialog_a_data[0].lower()

        def set_dummy_delay(scanner_manufacturer):
            """
            Calculate the time delay in seconds needed to wait between receiving a
            trigger from the fORP and starting the paradigm.

            :param scanner_manufacturer: the scanner manufacturer (siemens or ge)
            :type scanner_manufacturer:str
            :return: Time delay in seconds
            :rtype: float
            """

            if scanner_manufacturer == 'siemens':
                # For Siemens MRI systems the tigger is recieved at the start of the first
                # 'real' fMRI volume i.e. no triggers are sent during dummy scans so no
                # delay is needed
                 delay = 0
            elif scanner_manufacturer == 'ge':
                # Create a dialogue box so that the operator can enter the number of
                # dummy scans and the repetition time
                operator_dialog = gui.Dlg(title='Dummy Scan Options')
                operator_dialog.addField('Number of dummy scans (DDAs):', initial=5, choices=['0','1','2', '3', '4', '5', '6', '7', '8'], tip="Select the number of dummy scans (see userCV numdda)")
                operator_dialog.addField('Repetition time (TR) in ms:', initial=3330, tip="Enter the repetition time in ms")
                operator_dialog.validate()
                operator_dialog_data = operator_dialog.show()

                if operator_dialog.OK:
                    numdda = int(operator_dialog_data[0])
                    try:
                        TR = int(operator_dialog_data[1])
                    except ValueError:
                        print('* WARNING: TR must be an integer number of ms')
                        # Re-prompt the user to enter the TR if they failed to enter an int
                        delay = set_dummy_delay()
                else:
                    print('* Operator clicked Cancel, exiting paradigm')
                    core.quit()

                delay = float(numdda * TR / 1000)

            return delay

        dummy_delay_s = set_dummy_delay(scanner)
      Begin Experiment:
        # This variable needs to be available with "run" function to must be placed here rather than in "Before Experiment"
        trigger_type = operator_dialog_a_data[1]
  Routine wait_for_manual_trigger
    RoutineSettingsComponent wait_for_manual_trigger
      skipIf = scanner == "siemens"
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    CodeComponent manual_trigger_code
      Code Type = Auto->JS
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      Begin Routine:
        # Note: the wait_for_manual_trigger routine is skipped if scanner == siemens (see Flow tab of Routine settings)
        if scanner == 'ge':
            print('* Press "m" after the Prep Scan has finished')
    ImageComponent instructions_wait_for_manual_trigger
      image = resources/visual_instructions.png
      size = (1.2, None)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent manual_trigger
      allowedKeys = "m"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine wait_for_scanner_trigger
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    CodeComponent scanner_trigger_code
      Code Type = Auto->JS
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      Begin Routine:
        print('* Waiting for scanner trigger "%s" to start the paradigm' % trigger_type)
      End Routine:
        # tigger_type is transformed from str to tuple in the routine, so just need to extract first element
        print('* Trigger "%s" received. Waiting %g s for dummy scans to finish before starting paradigm' % (trigger_type[0], dummy_delay_s))
    ImageComponent instructions_wait_for_scanner_trigger
      image = resources/visual_instructions.png
      size = (1.2, None)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent scanner_trigger
      allowedKeys [set every repeat] = trigger_type
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine wait_for_dummy_scans
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    ImageComponent instructions_wait_for_dummy_scans
      image = resources/visual_instructions.png
      size = (1.2, None)
      startVal [time (s)] = 0
      stopVal [duration (s)] = dummy_delay_s
      units = height
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  Routine rest_block
    RoutineSettingsComponent rest_block
      color = -0.0039, -0.0039, -0.0039
      useWindowParams = True
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    ImageComponent rest_crosshair
      image = resources/visual_rest.png
      size = (1.3, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.6
      units = height
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  Routine task_block
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    CodeComponent task_code
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        # Generate a list of periods to display each chequerboard image
        frame = 0

        # Set length of block
        block_duration_ms = 15600

        # Calculate number of frames to make this block length
        max_frames = int(block_duration_ms * expInfo['frameRate'] / 1000)

        # Calculate difference between desired length of block and actual
        actual_block_duration_s = max_frames / expInfo['frameRate']
        actual_block_duration_ms = 1000 * actual_block_duration_s
        pad_duration = (block_duration_ms - actual_block_duration_ms) / 1000

        # Set minimum time to display an image
        min_flick_duration = 0.05
        min_flick_frames = int(min_flick_duration * expInfo['frameRate'])

        # Set maximum time to display and image
        max_flick_duration = 0.25
        max_flick_frames = int(max_flick_duration * expInfo['frameRate'])

        frame = 0
        frame_list_a = []
        while True:
            frame1 = random.randint(min_flick_frames,max_flick_frames)
            frame += frame1
            frame_list_a.append(frame1)
            if frame >= (max_frames - max_flick_frames):
                break

        # Display one more image to stop at max_frames exactly
        frames_remaining = max_frames - frame
        frame_list_a.append(frames_remaining)
        num_frames = len(frame_list_a)

        # Create a second shuffled list for the other image
        frame_list_b = frame_list_a.copy()
        random.shuffle(frame_list_b)

        counter = 0
      End Routine:
        counter += 1
        if counter == num_frames:
            random.shuffle(frame_list_a)
            random.shuffle(frame_list_b)
            counter = 0
    ImageComponent task_a
      image = resources/visual_chequerboard_a.png
      size = (1.3, None)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = $frame_list_a[counter]
      units = height
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    ImageComponent task_b
      image = resources/visual_chequerboard_b.png
      size = (1.3, None)
      startVal [frame N] = $frame_list_a[counter]
      stopVal [duration (frames)] = $frame_list_b[counter]
      units = height
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  Routine task_pad
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    CodeComponent task_pad_code
      Code Type = Auto->JS
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      Begin Routine:
        core.wait(pad_duration)
Flow
  Routine operator_input
  Routine wait_for_manual_trigger
  Routine wait_for_scanner_trigger
  Routine wait_for_dummy_scans
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 9
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    Routine rest_block
    LoopInitiator repeats_task loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = num_frames
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      Routine task_block
    LoopTerminator repeats_task
    Routine task_pad
  LoopTerminator blocks
